# MMConfig for ReplayCamera — replays pre-acquired OME-Zarr data
# Requires UniMMCore from pymmcore-plus experimental
#
# Usage:
#   from pymmcore_plus.experimental.unicore.core._unicore import UniMMCore
#   core = UniMMCore()
#   core.loadSystemConfiguration("MMConfig_demo_ReplayCamera.cfg")

# Reset
Property,Core,Initialize,0

# Devices
Device,DHub,DemoCamera,DHub
Device,Dichroic,DemoCamera,DWheel
Device,Emission,DemoCamera,DWheel
Device,Excitation,DemoCamera,DWheel
Device,Objective,DemoCamera,DObjective
Device,ObjectiveZ,DemoCamera,DStage
Device,PiezoZ,DemoCamera,DStage
Device,Path,DemoCamera,DLightPath
Device,XY,DemoCamera,DXYStage
Device,White Light Shutter,DemoCamera,DShutter
Device,Autofocus,DemoCamera,DAutoFocus
Device,LED,DemoCamera,DStateDevice
Device,LED Shutter,Utilities,State Device Shutter
#py pyDevice,Camera,shrimpy.replay_camera,ReplayCamera

# Pre-init settings for devices
Property,LED,Number of positions,10
# Update data path to point to desired dataset
#py Property,Camera,DataPath,/hpc/projects/comp.micro/microscope_dev/smart_fov_selection/input_data/2026_06_24_A549_H2BC21_FOV_selection_mantis/0-flatfield/2026_06_24_A549_H2BC21_FOV_selection_1.zarr

# Hub (parent) references
Parent,Dichroic,DHub
Parent,Emission,DHub
Parent,Excitation,DHub
Parent,Objective,DHub
Parent,ObjectiveZ,DHub
Parent,PiezoZ,DHub
Parent,Path,DHub
Parent,XY,DHub
Parent,White Light Shutter,DHub
Parent,Autofocus,DHub
Parent,LED,DHub

# Initialize
Property,Core,Initialize,1

# Roles
Property,Core,Camera,Camera
Property,Core,Shutter,White Light Shutter
Property,Core,Focus,PiezoZ
Property,Core,AutoShutter,1

# Focus directions
FocusDirection,ObjectiveZ,0
FocusDirection,PiezoZ,0

# Labels
# Dichroic
Label,Dichroic,9,Empty
Label,Dichroic,8,State-8
Label,Dichroic,7,State-7
Label,Dichroic,6,State-6
Label,Dichroic,5,State-5
Label,Dichroic,4,State-4
Label,Dichroic,3,89402bs
Label,Dichroic,2,Q585LP
Label,Dichroic,1,Q505LP
Label,Dichroic,0,400DCLP
# Emission
Label,Emission,9,Empty
Label,Emission,8,State-8
Label,Emission,7,State-7
Label,Emission,6,State-6
Label,Emission,5,State-5
Label,Emission,4,89402m
Label,Emission,3,Chroma-HQ700
Label,Emission,2,Chroma-HQ535
Label,Emission,1,Chroma-D460
Label,Emission,0,Chroma-HQ620
# Excitation
Label,Excitation,9,Empty
Label,Excitation,8,State-8
Label,Excitation,7,State-7
Label,Excitation,6,State-6
Label,Excitation,5,State-5
Label,Excitation,4,State-4
Label,Excitation,3,Chroma-HQ620
Label,Excitation,2,Chroma-HQ570
Label,Excitation,1,Chroma-HQ480
Label,Excitation,0,Chroma-D360
# LED
Label,LED,9,State-9
Label,LED,8,State-8
Label,LED,7,State-7
Label,LED,6,State-6
Label,LED,5,State-5
Label,LED,4,635nm
Label,LED,3,550nm
Label,LED,2,470nm
Label,LED,1,385nm
Label,LED,0,Closed
# Objective
Label,Objective,5,Objective-5
Label,Objective,4,Objective-4
Label,Objective,3,Nikon 20X Plan Fluor ELWD
Label,Objective,2,Objective-2
Label,Objective,1,Nikon 10X S Fluor
Label,Objective,0,Nikon 40X Plan Fluor ELWD
# Path
Label,Path,2,State-2
Label,Path,1,State-1
Label,Path,0,State-0

# Configuration presets
# Group: Objective
# Preset: 20X
ConfigGroup,Objective,20X,Objective,State,3
# Preset: 40X
ConfigGroup,Objective,40X,Objective,State,0
# Preset: 10X
ConfigGroup,Objective,10X,Objective,State,1

# Group: Channel
# Each preset sets the ReplayCamera channel and the optical path
# Channel names MUST match the channel_names in the zarr dataset:
#   ['BF - Oblique', 'GFP EX488 EM525-45']

# Preset: BF - Oblique
ConfigGroup,Channel,BF - Oblique,Emission,Label,Chroma-HQ535
#py ConfigGroup,Channel,BF - Oblique,Camera,Channel,BF - Oblique

# Preset: GFP EX488 EM525-45
ConfigGroup,Channel,GFP EX488 EM525-45,Emission,Label,Chroma-HQ535
#py ConfigGroup,Channel,GFP EX488 EM525-45,Camera,Channel,GFP EX488 EM525-45

# Group: System
# Preset: Startup
ConfigGroup,System,Startup,Objective,Label,Nikon 10X S Fluor
ConfigGroup,System,Startup,LED Shutter,State Device,LED
ConfigGroup,System,Startup,Core,ChannelGroup,Channel

# PixelSize settings
ConfigPixelSize,Res20x,Objective,Label,Nikon 20X Plan Fluor ELWD
PixelSize_um,Res20x,0.5
ConfigPixelSize,Res40x,Objective,Label,Nikon 40X Plan Fluor ELWD
PixelSize_um,Res40x,0.25
ConfigPixelSize,Res10x,Objective,Label,Nikon 10X S Fluor
PixelSize_um,Res10x,1.0
