# Generated by Configurator on Tue Jan 20 15:08:59 PST 2026

# Reset
Property,Core,Initialize,0

# Devices
Device,COM11,SerialManager,COM11
Device,COM8,SerialManager,COM8
Device,COM4,SerialManager,COM4
Device,TigerCommHub,ASITiger,TigerCommHub
Device,XYStage:XY:31,ASITiger,XYStage:XY:31
Device,PiezoStage:Q:35,ASITiger,PiezoStage:Q:35
Device,SutterHub,SutterLambda2,SutterHub
Device,Sutter-Wheel-A,SutterLambda2,Wheel-A
Device,TriggerScopeMM-Hub2,TriggerScopeMM,TriggerScopeMM-Hub
Device,TS2_DAC03,TriggerScopeMM,TS_DAC03
Device,TS2_DAC04,TriggerScopeMM,TS_DAC04
Device,TS2_DAC07,TriggerScopeMM,TS_DAC07
Device,TS2_TTL1-8,TriggerScopeMM,TS_TTL1-8
Device,Ti2,NikonTi2,Ti2-E__0
Device,ZDrive,NikonTi2,ZDrive
Device,Nosepiece,NikonTi2,Nosepiece
Device,FilterTurret1,NikonTi2,FilterTurret1
Device,Turret1Shutter,NikonTi2,Turret1Shutter
Device,LightPath,NikonTi2,LightPath
Device,PFS,NikonTi2,PFS
Device,PFSOffset,NikonTi2,PFSOffset
Device,IntermediateMagnification,NikonTi2,IntermediateMagnification
Device,Blackfly Epi,SpinnakerCamera,Blackfly S BFS-U3-51S5M
Device,Prime BSI Express,PVCAM,Camera-1
Device,TS2 Shutter,Utilities,State Device Shutter
Device,AP Galvo,Utilities,DA Z Stage
Device,IP Galvo,Utilities,DA Z Stage

# Pre-init settings for devices
Property,TigerCommHub,Port,COM8
Property,SutterHub,Port,COM4
Property,TriggerScopeMM-Hub2,Port,COM11
Property,TS2_DAC03,Voltage Range,-2 - 2V
Property,TS2_DAC04,Voltage Range,-2 - 2V
Property,TS2_DAC07,Voltage Range,-5 - 5V
Property,Blackfly Epi,Serial Number,21270950
Property,AP Galvo,Stage High Position(um),-173.21
Property,AP Galvo,Stage High Voltage,2.0000
Property,AP Galvo,Stage Low Position(um),173.21
Property,AP Galvo,Stage Low Voltage,-2.0000
Property,IP Galvo,Stage High Position(um),2.0000
Property,IP Galvo,Stage High Voltage,2.0000
Property,IP Galvo,Stage Low Position(um),-2.0000
Property,IP Galvo,Stage Low Voltage,-2.0000

# Pre-init settings for COM ports
Property,COM11,AnswerTimeout,500.0000
Property,COM11,BaudRate,115200
Property,COM11,DTR,Disable
Property,COM11,DataBits,8
Property,COM11,DelayBetweenCharsMs,0.0000
Property,COM11,Fast USB to Serial,Disable
Property,COM11,Handshaking,Off
Property,COM11,Parity,None
Property,COM11,StopBits,1
Property,COM11,Verbose,1
Property,COM8,AnswerTimeout,500.0000
Property,COM8,BaudRate,115200
Property,COM8,DTR,Disable
Property,COM8,DataBits,8
Property,COM8,DelayBetweenCharsMs,0.0000
Property,COM8,Fast USB to Serial,Disable
Property,COM8,Handshaking,Off
Property,COM8,Parity,None
Property,COM8,StopBits,1
Property,COM8,Verbose,1
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,128000
Property,COM4,DTR,Disable
Property,COM4,DataBits,8
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Fast USB to Serial,Disable
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1

# Hub (parent) references
Parent,XYStage:XY:31,TigerCommHub
Parent,PiezoStage:Q:35,TigerCommHub
Parent,Sutter-Wheel-A,SutterHub
Parent,TS2_DAC03,TriggerScopeMM-Hub2
Parent,TS2_DAC04,TriggerScopeMM-Hub2
Parent,TS2_DAC07,TriggerScopeMM-Hub2
Parent,TS2_TTL1-8,TriggerScopeMM-Hub2
Parent,ZDrive,Ti2
Parent,Nosepiece,Ti2
Parent,FilterTurret1,Ti2
Parent,Turret1Shutter,Ti2
Parent,LightPath,Ti2
Parent,PFS,Ti2
Parent,PFSOffset,Ti2
Parent,IntermediateMagnification,Ti2

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,PiezoStage:Q:35,0
FocusDirection,ZDrive,0
FocusDirection,PFSOffset,0
FocusDirection,AP Galvo,0
FocusDirection,IP Galvo,0

# Roles
Property,Core,Shutter,Turret1Shutter
Property,Core,Focus,PiezoStage:Q:35
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# Sutter-Wheel-A
Label,Sutter-Wheel-A,9,Filter-9
Label,Sutter-Wheel-A,8,Filter-8
Label,Sutter-Wheel-A,7,Filter-7
Label,Sutter-Wheel-A,6,Filter-6
Label,Sutter-Wheel-A,5,Filter-5
Label,Sutter-Wheel-A,4,Filter-4
Label,Sutter-Wheel-A,3,Filter-3
Label,Sutter-Wheel-A,2,Filter-2
Label,Sutter-Wheel-A,1,Filter-1
Label,Sutter-Wheel-A,0,Filter-0

# Configuration presets
# Preset: Right
ConfigGroup,Imaging Path,Right,Core,Camera,Prime BSI Express
ConfigGroup,Imaging Path,Right,LightPath,Label,2-R100
ConfigGroup,Imaging Path,Right,Core,Shutter,TS2 Shutter
ConfigGroup,Imaging Path,Right,Turret1Shutter,State,0

# Preset: Left
ConfigGroup,Imaging Path,Left,Core,Camera,Blackfly Epi
ConfigGroup,Imaging Path,Left,LightPath,Label,4-L100
ConfigGroup,Imaging Path,Left,Core,Shutter,TS2 Shutter
ConfigGroup,Imaging Path,Left,Turret1Shutter,State,1

# Group: Channels - Left
# Preset: CY5 EX618-50 EM698-70
ConfigGroup,Channels - Left,CY5 EX618-50 EM698-70,FilterTurret1,State,3
ConfigGroup,Channels - Left,CY5 EX618-50 EM698-70,TS2_TTL1-8,State,8

# Preset: mCherry EX554-23 EM609-54
ConfigGroup,Channels - Left,mCherry EX554-23 EM609-54,FilterTurret1,State,2
ConfigGroup,Channels - Left,mCherry EX554-23 EM609-54,TS2_TTL1-8,State,8

# Preset: DAPI EX356-30 EM447-60
ConfigGroup,Channels - Left,DAPI EX356-30 EM447-60,FilterTurret1,State,0
ConfigGroup,Channels - Left,DAPI EX356-30 EM447-60,TS2_TTL1-8,State,2

# Preset: GFP EX466-40 EM525-50
ConfigGroup,Channels - Left,GFP EX466-40 EM525-50,FilterTurret1,State,1
ConfigGroup,Channels - Left,GFP EX466-40 EM525-50,TS2_TTL1-8,State,4

# Preset: BF
ConfigGroup,Channels - Left,BF,FilterTurret1,State,5
ConfigGroup,Channels - Left,BF,TS2_TTL1-8,State,1


# Group: Channels - Right
# Preset: GFP EX488 EM525-45
ConfigGroup,Channels - Right,GFP EX488 EM525-45,FilterTurret1,State,5
ConfigGroup,Channels - Right,GFP EX488 EM525-45,Sutter-Wheel-A,State,2
ConfigGroup,Channels - Right,GFP EX488 EM525-45,TS2_TTL1-8,State,32

# Preset: mCherry EX561 EM600-37
ConfigGroup,Channels - Right,mCherry EX561 EM600-37,FilterTurret1,State,5
ConfigGroup,Channels - Right,mCherry EX561 EM600-37,Sutter-Wheel-A,State,3
ConfigGroup,Channels - Right,mCherry EX561 EM600-37,TS2_TTL1-8,State,64

# Preset: Cy5 EX639 EM698-70
ConfigGroup,Channels - Right,Cy5 EX639 EM698-70,FilterTurret1,State,5
ConfigGroup,Channels - Right,Cy5 EX639 EM698-70,Sutter-Wheel-A,State,4
ConfigGroup,Channels - Right,Cy5 EX639 EM698-70,TS2_TTL1-8,State,128

# Preset: BF - Oblique
ConfigGroup,Channels - Right,BF - Oblique,FilterTurret1,State,5
ConfigGroup,Channels - Right,BF - Oblique,Sutter-Wheel-A,State,2
ConfigGroup,Channels - Right,BF - Oblique,TS2_TTL1-8,State,1

# Group: System
# Preset: Startup
ConfigGroup,System,Startup,Blackfly Epi,Gain Auto,Off
ConfigGroup,System,Startup,Blackfly Epi,Gain,0
ConfigGroup,System,Startup,Blackfly Epi,Gamma Enabled,0
ConfigGroup,System,Startup,Blackfly Epi,ADC Bit Depth,Bit12
ConfigGroup,System,Startup,Blackfly Epi,Pixel Format,Mono12p
ConfigGroup,System,Startup,Blackfly Epi,Binning,2
ConfigGroup,System,Startup,Blackfly Epi,Black Level,2
ConfigGroup,System,Startup,TriggerScopeMM-Hub2,UseActionLEDs,Off
ConfigGroup,System,Startup,TS2 Shutter,State Device,TS2_TTL1-8
ConfigGroup,System,Startup,Sutter-Wheel-A,State Change Speed,1
ConfigGroup,System,Startup,Core,Focus,PiezoStage:Q:35
ConfigGroup,System,Startup,AP Galvo,DA Device,TS2_DAC03
ConfigGroup,System,Startup,IP Galvo,DA Device,TS2_DAC04
ConfigGroup,System,Startup,AP Galvo,Position,0
ConfigGroup,System,Startup,IP Galvo,Position,0.66
ConfigGroup,System,Startup,XYStage:XY:31,AxisPolarityX,Reversed
ConfigGroup,System,Startup,Prime BSI Express,PP  1   ENABLED,No
ConfigGroup,System,Startup,Prime BSI Express,PP  2   ENABLED,No
ConfigGroup,System,Startup,Prime BSI Express,PP  3   ENABLED,No
ConfigGroup,System,Startup,Prime BSI Express,PP  4   ENABLED,No
ConfigGroup,System,Startup,Core,TimeoutMs,10000



# PixelSize settings
# Resolution preset: Right
ConfigPixelSize,Right,Core,Camera,Prime BSI Express
PixelSize_um,Right,0.1133
PixelSizeAffine,Right,1.0,0.0,0.0,0.0,1.0,0.0

# Resolution preset: Left
ConfigPixelSize,Left,Core,Camera,Blackfly Epi
PixelSize_um,Left,0.0345
PixelSizeAffine,Left,1.0,0.0,0.0,0.0,1.0,0.0
