# Generated by Configurator on Mon May 05 11:44:18 PDT 2025

# Reset
Property,Core,Initialize,0

# Devices
Device,COM7,SerialManager,COM7
Device,SquidHub,Cephla,SquidHub
Device,CephlaShutter,Cephla,CephlaShutter
Device,XYStage,Cephla,XYStage
Device,ZStage,Cephla,ZStage
Device,ORX-10GS-51S5M,SpinnakerCamera,ORX-10GS-51S5M

# Pre-init settings for devices
Property,SquidHub,Home on startup,No
Property,SquidHub,Port,COM7
Property,CephlaShutter,Has Lasers,No
Property,XYStage,DirectionX,Negative
Property,XYStage,DirectionY,Negative
Property,XYStage,FullStepsPerRevX,200.0000
Property,XYStage,FullStepsPerRevY,200.0000
Property,XYStage,MicroSteppingDefaultX,8
Property,XYStage,MicroSteppingDefaultY,8
Property,XYStage,ScrewPitchXmm,4
Property,XYStage,ScrewPitchYmm,4
Property,ZStage,DirectionZ,Negative
Property,ZStage,FullStepsPerRevZ,200.0000
Property,ZStage,MicroSteppingDefaultZ,8
Property,ZStage,ScrewPitchZmm,0.3000
Property,ORX-10GS-51S5M,Serial Number,23011971

# Pre-init settings for COM ports
Property,COM7,AnswerTimeout,500.0000
Property,COM7,BaudRate,115200
Property,COM7,DTR,Disable
Property,COM7,DataBits,8
Property,COM7,DelayBetweenCharsMs,0.0000
Property,COM7,Fast USB to Serial,Disable
Property,COM7,Handshaking,Off
Property,COM7,Parity,None
Property,COM7,StopBits,1
Property,COM7,Verbose,1

# Hub (parent) references
Parent,CephlaShutter,SquidHub
Parent,XYStage,SquidHub
Parent,ZStage,SquidHub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,ZStage,0

# Roles
Property,Core,Camera,ORX-10GS-51S5M
Property,Core,Shutter,CephlaShutter
Property,Core,Focus,ZStage
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets

# Group: System  
# Preset: Startup  
ConfigGroup,System,Startup,CephlaShutter,Blue,0
ConfigGroup,System,Startup,CephlaShutter,Green,0
ConfigGroup,System,Startup,CephlaShutter,Intensity,8

# PixelSize settings

